<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns:q3="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LoadImage">
          <q1:FileName>C:\Users\Rig\Desktop\BatchK\K4_camA.png</q1:FileName>
          <q1:Mode>Grayscale</q1:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringLoadImage">
        <MemberName>FileName</MemberName>
        <Name>FileNameB</Name>
        <Value>C:\Users\Rig\Desktop\BatchK\K4_camB.png</Value>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Image</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringLoadImage">
        <MemberName>FileName</MemberName>
        <Name>FileNameA</Name>
        <Value>C:\Users\Rig\Desktop\BatchK\K4_camA.png</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:FlyCapture">
          <q2:Index>0</q2:Index>
          <q2:ColorProcessing>NoColorProcessing</q2:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Normalize" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:AbsoluteDifference" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Normalize" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:AbsoluteDifference" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LoadImage">
          <q1:FileName>C:\Users\Rig\Desktop\BatchK\K4_camB.png</q1:FileName>
          <q1:Mode>Grayscale</q1:Mode>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>8</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>14</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Vision.LoadImage, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Vision.LoadImage, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Normalize, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.AbsoluteDifference, Bonsai.Dsp, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>